<?xml version="1.0" encoding="UTF-8"?><batch>
    <batchstep method="net.sf.mzmine.modules.rawdatamethods.rawdataimport.RawDataImportModule">
        <parameter name="Raw data file names">
            <file>NOT_USED</file>
        </parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.rawdatamethods.peakpicking.massdetection.MassDetectionModule">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scans">
            <ms_level>1</ms_level>
        </parameter>
        <parameter name="Mass detector" selected="Centroid">
            <module name="Centroid">
                <parameter name="Noise level">1.0</parameter>
            </module>
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        </parameter>
        <parameter name="Mass list name">masses</parameter>
        <parameter name="Output netCDF filename (optional)" selected="false"/>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.masslistmethods.ADAPchromatogrambuilder.ADAPChromatogramBuilderModule">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scans">
            <ms_level>1</ms_level>
        </parameter>
        <parameter name="Mass list">masses</parameter>
        <parameter name="Min group size in # of scans">5</parameter>
        <parameter name="Group intensity threshold">50000.0</parameter>
        <parameter name="Min highest intensity">50000.0</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.005</absolutetolerance>
            <ppmtolerance>15.0</ppmtolerance>
        </parameter>
        <parameter name="Suffix">chromatograms</parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.peaklistmethods.peakpicking.deconvolution.DeconvolutionModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Suffix">deconvoluted</parameter>
        <parameter name="Algorithm" selected="Wavelets (ADAP)">
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            <module name="Wavelets (ADAP)">
                <parameter name="S/N threshold">10.0</parameter>
                <parameter name="S/N estimator" selected="Intensity window SN">
                    <module name="Intensity window SN"/>
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                </parameter>
                <parameter name="min feature height">10.0</parameter>
                <parameter name="coefficient/area threshold">110.0</parameter>
                <parameter name="Peak duration range">
                    <min>0.01</min>
                    <max>0.2</max>
                </parameter>
                <parameter name="RT wavelet range">
                    <min>0.0</min>
                    <max>0.005</max>
                </parameter>
            </module>
        </parameter>
        <parameter measure="MEDIAN" name="m/z center calculation" weighting="NONE">CenterFunction</parameter>
        <parameter name="m/z range for MS2 scan pairing (Da)" selected="false"/>
        <parameter name="RT range for MS2 scan pairing (min)" selected="false"/>
        <parameter name="Remove original feature list">true</parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.peaklistmethods.io.csvexport.CSVExportModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Filename">
            <current_file>NOT_USED</current_file>
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        </parameter>
        <parameter name="Field separator">,</parameter>
        <parameter name="Export common elements">
            <item>Export row ID</item>
            <item>Export row m/z</item>
            <item>Export row retention time</item>
        </parameter>
        <parameter name="Export data file elements">
            <item>Peak m/z</item>
            <item>Peak RT</item>
            <item>Peak RT start</item>
            <item>Peak RT end</item>
            <item>Peak height</item>
            <item>Peak area</item>
            <item>Peak charge</item>
            <item>Peak FWHM</item>
            <item>Peak m/z min</item>
            <item>Peak m/z max</item>
        </parameter>
        <parameter name="Export quantitation results and other information">true</parameter>
        <parameter name="Identification separator">,</parameter>
        <parameter name="Filter rows">ALL</parameter>
    </batchstep>
</batch>
