<?xml version="1.0" encoding="UTF-8"?>
<batch>
    <batchstep method="net.sf.mzmine.modules.rawdatamethods.rawdataimport.RawDataImportModule">
        <parameter name="Raw data file names">
            <file>C:\Users\dalexis\Documents\LCMS_processing\test_data_philipp\tdir\centroid\neg_batch_0_pooled_0_0_1_seqid1_4.mzML</file>
        </parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.rawdatamethods.peakpicking.massdetection.MassDetectionModule">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scans">
            <ms_level>1</ms_level>
        </parameter>
        <parameter name="Mass detector" selected="Centroid">
            <module name="Centroid">
                <parameter name="Noise level">100.0</parameter>
            </module>
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        </parameter>
        <parameter name="Mass list name">masses</parameter>
        <parameter name="CDF Filename (optional)" selected="false"/>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.masslistmethods.chromatogrambuilder.ChromatogramBuilderModule">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scans">
            <ms_level>1</ms_level>
        </parameter>
        <parameter name="Mass list">masses</parameter>
        <parameter name="Min time span (min)">0.1</parameter>
        <parameter name="Min height">1000.0</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.002</absolutetolerance>
            <ppmtolerance>15.0</ppmtolerance>
        </parameter>
        <parameter name="Suffix">chromatograms</parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.peaklistmethods.peakpicking.deconvolution.DeconvolutionModule">
        <parameter name="Peak lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Suffix">deconvoluted</parameter>
        <parameter name="Algorithm" selected="Savitzky-Golay">
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            <module name="Savitzky-Golay">
                <parameter name="Min peak height">1000.0</parameter>
                <parameter name="Peak duration range (min)">
                    <min>0.2</min>
                    <max>1.3</max>
                </parameter>
                <parameter name="Derivative threshold level">0.1</parameter>
            </module>
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        </parameter>
        <parameter measure="MEDIAN" name="m/z center calculation" weighting="NONE">CenterFunction</parameter>
        <parameter name="m/z range for MS2 scan pairing (Da)" selected="false"/>
        <parameter name="RT range for MS2 scan pairing (min)" selected="false"/>
        <parameter name="Remove original peak list">false</parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.peaklistmethods.io.csvexport.CSVExportModule">
        <parameter name="Peak lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Filename">\\pasteur\SysBC-Home\dalexis\Documents\software\ex_export_pl_mzmine.csv</parameter>
        <parameter name="Field separator">,</parameter>
        <parameter name="Export common elements">
            <item>Export row ID</item>
            <item>Export row m/z</item>
            <item>Export row retention time</item>
        </parameter>
        <parameter name="Export data file elements">
            <item>Peak m/z</item>
            <item>Peak RT</item>
            <item>Peak RT start</item>
            <item>Peak RT end</item>
            <item>Peak height</item>
            <item>Peak area</item>
            <item>Peak charge</item>
        </parameter>
        <parameter name="Export quantitation results and other information">true</parameter>
        <parameter name="Identification separator">,</parameter>
        <parameter name="Filter rows">ALL</parameter>
    </batchstep>
</batch>
